---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Tutorial Gaze Cuing"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/User/OpenSesame/Tutorial1"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background "#ffffff"

define loop block_loop
	set source table
	set repeat 3
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 gaze_cue left
	setcycle 0 target_letter F
	setcycle 0 target_pos -300
	setcycle 0 dist_pos 300
	setcycle 0 correct_response y
	setcycle 0 congruency congruent
	setcycle 1 gaze_cue right
	setcycle 1 target_letter F
	setcycle 1 target_pos -300
	setcycle 1 dist_pos 300
	setcycle 1 correct_response y
	setcycle 1 congruency incongruent
	setcycle 2 gaze_cue left
	setcycle 2 target_letter H
	setcycle 2 target_pos -300
	setcycle 2 dist_pos 300
	setcycle 2 correct_response m
	setcycle 2 congruency congruent
	setcycle 3 gaze_cue right
	setcycle 3 target_letter H
	setcycle 3 target_pos -300
	setcycle 3 dist_pos 300
	setcycle 3 correct_response m
	setcycle 3 congruency incongruent
	setcycle 4 gaze_cue left
	setcycle 4 target_letter F
	setcycle 4 target_pos 300
	setcycle 4 dist_pos -300
	setcycle 4 correct_response y
	setcycle 4 congruency incongruent
	setcycle 5 gaze_cue right
	setcycle 5 target_letter F
	setcycle 5 target_pos 300
	setcycle 5 dist_pos -300
	setcycle 5 correct_response y
	setcycle 5 congruency congruent
	setcycle 6 gaze_cue left
	setcycle 6 target_letter H
	setcycle 6 target_pos 300
	setcycle 6 dist_pos -300
	setcycle 6 correct_response m
	setcycle 6 congruency incongruent
	setcycle 7 gaze_cue right
	setcycle 7 target_letter H
	setcycle 7 target_pos 300
	setcycle 7 dist_pos -300
	setcycle 7 correct_response m
	setcycle 7 congruency congruent
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run reset_feedback always
	run block_loop always
	run feedback always

define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of experiment"
	__form_text__
	Well done! 
	The experiment is now over.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of practice"
	__form_text__
	Ok, you now have praticed the usage. Now let's start the experiment.
	
	Klick OK if you are ready!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop eperimental_loop
	set source table
	set repeat 8
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define sequence experiment
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run instructions always
	run practice_loop always
	run end_of_practice always
	run eperimental_loop always
	run end_of_experiment always

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Gibt Versuchspersonen Feedback"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="End of block<br /><br />Your average response time was [avg_rt] ms<br />Your accuracy was [acc] %<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 745
	set description "Präsentiert Stimuli"
	draw fixdot color="#000000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad gaze_cue
	set duration 495
	set description "Präsentiert Stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define sampler incorrect_sampler
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Spielt eine Audiodatei in .wav oder .ogg Format ab"

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Press "y" if you see the letter 'F' and "m" if you see the letter 'H'.
	You have 2 seconds to make your decision. You will hear a sound, if your answer was not correct, otherwise the next sceen will be shown.
	
	First you will have a practice phase to get used to the experiment. After that, we will record your responses in the experimental phase.
	
	So now let's start the practice phase!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses "y;m"

define logger logger
	set description "Registriert experimentelle Daten"
	set auto_log yes

define sketchpad neutral_gaze
	set duration 745
	set description "Präsentiert Stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define loop practice_loop
	set source table
	set repeat 2
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad target
	set duration 0
	set description "Präsentiert Stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[target_letter]" x="[target_pos]" y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=X x="[dist_pos]" y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run fixation_dot always
	run neutral_gaze always
	run gaze_cue always
	run target always
	run keyboard_response always
	run incorrect_sampler "[correct]=0"
	run logger always

