---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Attentional Blink"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/User/OpenSesameProjects/Tutorial 3"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background grey

define inline_script RSVP_psychobackend_script_
	set description "Executes Python code"
	___run__
	for textstim in textstim_list:
		textstim.draw()
		win.flip()
		clock.sleep(var.letter_dur)
		win.flip()
		clock.sleep(var.isi)
	__end__
	___prepare__
	from psychopy import visual
	import random
	import string
	
	# The color of T1
	var.T1_color = 'white'
	# The presentation time of each stimulus
	# (rounded up to nearest value compatible with refresh rate)
	var.letter_dur = 100
	# The inter-stimulus interval
	# (rounded up to nearest value compatible with refresh rate)
	var.isi = 70
	
	# The position of T1 is random between 7 and 15. Note that the first position is
	# 0, so the position indicates the number of preceding stimuli.
	var.T1_pos = random.randint(7, 15)
	# The maximum lag, i.e. the number of letters that follow T1.
	var.max_lag = 8
	# The length of the stream is the position of T1 + the maximum lag + 1. We need
	# to add 1, because we count starting at 0, so the length of a list is always
	# 1 larger than its maximum index.
	var.stream_len = var.T1_pos + var.max_lag + 1
	# We take all uppercase letters, which have been predefined in the `string`
	# module. Converting to a `list` creates a list of characters.
	letters = list(string.ascii_uppercase)
	# We remove 'X' from this list.
	letters.remove('X')
	# Randomly sample a `stream_len` number of letters
	stim_list = random.sample(letters, var.stream_len)
	
	if var.T2_present == 'y':
		var.T2_pos = var.T1_pos + var.lag
		stim_list[var.T2_pos] = 'X'
		
	
	textstim_list = []
	for i, stim in enumerate(stim_list):
		if i == var.T1_pos:
			color = 'white'
		else:
			color = 'black'
		# All stimuli require an psychopy.visual.Window object to be passed as first
		# argument. In OpenSesame, this object is available as `win`.
		textstim = visual.TextStim(win, text=stim, color=color)
		textstim_list.append(textstim)
	
	# Extract T1 from the list
	var.T1 = stim_list[var.T1_pos]
	__end__

define inline_script RSVP_script
	set description "Executes Python code"
	___run__
	import numpy
	
	l_letter_time = []
	l_blank_time = []
	for letter_canvas in letter_canvas_list:
		t1 = letter_canvas.show()
		l_letter_time.append(t1)
		clock.sleep(var.letter_dur)
		t2 = blank_canvas.show()
		l_blank_time.append(t2)
		clock.sleep(var.isi)
		
	a_letter_time = numpy.array(l_letter_time)
	a_blank_time = numpy.array(l_blank_time)
	a_letter_dur = a_blank_time - a_letter_time
	a_blank_dur = a_letter_time[1:] - a_blank_time[:-1]
	
	var.mean_letter_dur = a_letter_dur.mean()
	var.std_letter_dur = a_letter_dur.std()
	var.mean_blank_dur = a_blank_dur.mean()
	var.std_blank_dur = a_blank_dur.std()
	__end__
	___prepare__
	import random
	import string
	
	# The color of T1
	var.T1_color = 'white'
	# The presentation time of each stimulus
	# (rounded up to nearest value compatible with refresh rate)
	var.letter_dur = 100
	# The inter-stimulus interval
	# (rounded up to nearest value compatible with refresh rate)
	var.isi = 70
	
	# The position of T1 is random between 7 and 15. Note that the first position is
	# 0, so the position indicates the number of preceding stimuli.
	var.T1_pos = random.randint(7, 15)
	# The maximum lag, i.e. the number of letters that follow T1.
	var.max_lag = 8
	# The length of the stream is the position of T1 + the maximum lag + 1. We need
	# to add 1, because we count starting at 0, so the length of a list is always
	# 1 larger than its maximum index.
	var.stream_len = var.T1_pos + var.max_lag + 1
	# We take all uppercase letters, which have been predefined in the `string`
	# module. Converting to a `list` creates a list of characters.
	letters = list(string.ascii_uppercase)
	# We remove 'X' from this list.
	letters.remove('X')
	# Randomly sample a `stream_len` number of letters
	stim_list = random.sample(letters, var.stream_len)
	
	if var.T2_present == 'y':
		var.T2_pos = var.T1_pos + var.lag
		stim_list[var.T2_pos] = 'X'
		
	
	
	# Create an empty list for the canvas objects.
	letter_canvas_list = []
	# Loop through all letters in `stim_list`. `enumerate()` is a convenient
	# function that automatically returns (index, item) tuples. In our case, the
	# index (`i`) reflects the position in the RSVP stream. This Python trick, in
	# which you assign a single value to two variables, is called tuple unpacking.
	for i, stim in enumerate(stim_list):
		# Create a `canvas` object.
		letter_canvas = canvas()
		# If we are at the position of T1, we change the foreground color, because
		# T1 is white, while the default color (specified in the General tab) is
		# black.
		if i == var.T1_pos:
			letter_canvas.set_fgcolor(var.T1_color)
		# Draw the letter!
		letter_canvas.text(stim)
		# And add the canvas to the list.
		letter_canvas_list.append(letter_canvas)
		
	blank_canvas = canvas()
	
	# Extract T1 from the list
	var.T1 = stim_list[var.T1_pos]
	__end__

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical experiment.
	It consists of a practice phase, followed by an experimental phase. For more
	information, please visit <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you gest started!"

define sketchpad ask_T1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Which white letter did you see?<br><br>Please type the letter" x=0 y=0 z_index=0

define sketchpad ask_T2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Did you see the letter X?<br /><br />Answer 'y' or 'n'" x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat "[block_repeat]"
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 18
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 lag 0
	setcycle 0 T2_present y
	setcycle 1 lag 1
	setcycle 1 T2_present y
	setcycle 2 lag 2
	setcycle 2 T2_present y
	setcycle 3 lag 3
	setcycle 3 T2_present y
	setcycle 4 lag 4
	setcycle 4 T2_present y
	setcycle 5 lag 5
	setcycle 5 T2_present y
	setcycle 6 lag 6
	setcycle 6 T2_present y
	setcycle 7 lag 7
	setcycle 7 T2_present y
	setcycle 8 lag 8
	setcycle 8 T2_present y
	setcycle 9 lag ""
	setcycle 9 T2_present n
	setcycle 10 lag ""
	setcycle 10 T2_present n
	setcycle 11 lag ""
	setcycle 11 T2_present n
	setcycle 12 lag ""
	setcycle 12 T2_present n
	setcycle 13 lag ""
	setcycle 13 T2_present n
	setcycle 14 lag ""
	setcycle 14 T2_present n
	setcycle 15 lag ""
	setcycle 15 T2_present n
	setcycle 16 lag ""
	setcycle 16 T2_present n
	setcycle 17 lag ""
	setcycle 17 T2_present n
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run instructions_experimental "[condition]=experimental"
	run instructions_control "[condition]=control"
	run reset_feedback always
	run block_loop always
	run feedback always

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run new_inline_script always
	run about_this_template always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 10
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition "[condition1]"
	setcycle 0 block_repeat 2
	setcycle 1 practice no
	setcycle 1 condition "[condition1]"
	setcycle 1 block_repeat 2
	setcycle 2 practice no
	setcycle 2 condition "[condition1]"
	setcycle 2 block_repeat 2
	setcycle 3 practice no
	setcycle 3 condition "[condition1]"
	setcycle 3 block_repeat 2
	setcycle 4 practice no
	setcycle 4 condition "[condition1]"
	setcycle 4 block_repeat 2
	setcycle 5 practice no
	setcycle 5 condition "[condition2]"
	setcycle 5 block_repeat 2
	setcycle 6 practice no
	setcycle 6 condition "[condition2]"
	setcycle 6 block_repeat 2
	setcycle 7 practice no
	setcycle 7 condition "[condition2]"
	setcycle 7 block_repeat 2
	setcycle 8 practice no
	setcycle 8 condition "[condition2]"
	setcycle 8 block_repeat 2
	setcycle 9 practice no
	setcycle 9 condition "[condition2]"
	setcycle 9 block_repeat 2
	run block_sequence

define form_text_display experimental_text
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Go
	set margins "50;50;50;50"
	set form_title Information
	set form_text "Ok, let's start the experiment..."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="End of block<br /><br />Your accuracy was [acc] %<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad fixation_point
	set start_response_interval no
	set duration 955
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad instructions_control
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="INSTRUCTIONS<br /><br />You will see a serious of letters. <br />Please report whether an X was present or not.<br /><br />Press any key to start..." x=0 y=0 z_index=0

define sketchpad instructions_experimental
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="INSTRUCTIONS<br /><br />You will see a serious of letters. <br />Please report the identity of the white letter and whether an X was present or not.<br /><br />Press any key to start..." x=0 y=-32 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.subject_parity == 'even':
		var.condition1 = 'experimental'
		var.condition2 = 'control'
	else:
		var.condition1 = 'control'
		var.condition2 = 'experimental'
	__end__

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 2
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 condition "[condition1]"
	setcycle 0 block_repeat 0.5
	setcycle 1 practice yes
	setcycle 1 condition "[condition2]"
	setcycle 1 block_repeat 0.5
	run block_sequence

define form_text_display practice_text
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Go
	set margins "50;50;50;50"
	set form_title Information
	set form_text "First let's get some practice..."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define keyboard_response response_T1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[T1]"

define keyboard_response response_T1_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[T2_present]"
	set allowed_responses "y;n"

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_point always
	run RSVP_script never
	run RSVP_psychobackend_script_ always
	run ask_T1 "[condition]=experimental"
	run response_T1 "[condition]=experimental"
	run ask_T2 always
	run response_T1_1 always
	run logger always

